instance = openMHA

nchannels_in = 2
srate = 48000

mhalib = db
mha.fragsize = 48

mha.plugin_name = transducers

mha.transducers.calib_in.peaklevel = [111.4 111.4]
mha.transducers.calib_in.fir = [[-0.674757033017875 -0.339128228007168 0.030117856798366 -0.119542483672035 0.131726684555067 -0.071387589553860 0.056561094657502 -0.013365060531109 0.007091265106959 0.006913350591302 -0.002602409570910 0.023338189483743 -0.018652297865493 0.021281416315377 -0.014374905102702 0.015659551668403];[-0.674757033017875 -0.339128228007168 0.030117856798366 -0.119542483672035 0.131726684555067 -0.071387589553860 0.056561094657502 -0.013365060531109 0.007091265106959 0.006913350591302 -0.002602409570910 0.023338189483743 -0.018652297865493 0.021281416315377 -0.014374905102702 0.015659551668403]]
mha.transducers.calib_out.peaklevel = [100.8 100.8]
mha.transducers.calib_out.fir = [[-0.723329250680037 1.285750531421244 -1.764370643350338 1.702299222653803 0.569187694811727 -1.301642333817312 0.540112043557634 -0.111972475691304 0.187607100395961 0.532899301077540 -0.733701264924906 0.290587502735630 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-0.002191206231116];[-0.723329250680037 1.285750531421244 -1.764370643350338 1.702299222653803 0.569187694811727 -1.301642333817312 0.540112043557634 -0.111972475691304 0.187607100395961 0.532899301077540 -0.733701264924906 0.290587502735630 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-0.002191206231116]]
mha.transducers.calib_out.do_clipping = no

mha.transducers.plugin_name = mhachain

mha.transducers.mhachain.algos = [wavrec:record addsndfile:playback iirfilter:highpass altplugs]

mha.transducers.mhachain.record.prefix = /dev/shm/recording
mha.transducers.mhachain.record.use_date = no

mha.transducers.mhachain.playback.loop = no
mha.transducers.mhachain.playback.mode = add
mha.transducers.mhachain.playback.levelmode = rms
mha.transducers.mhachain.playback.level = 70
mha.transducers.mhachain.playback.channels = [0 1]

mha.transducers.mhachain.highpass.A = [1.0 -0.996]
mha.transducers.mhachain.highpass.B = [1.0 -1.0]

mha.transducers.mhachain.altplugs.plugs = [overlapadd:dynamiccompression identity]
mha.transducers.mhachain.altplugs.select = dynamiccompression

mha.transducers.mhachain.altplugs.dynamiccompression.fftlen = 288
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.type = hanning
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.user = []
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.len = 144
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.pos = 0.5
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.exp = 1
mha.transducers.mhachain.altplugs.dynamiccompression.zerownd.type = hanning
mha.transducers.mhachain.altplugs.dynamiccompression.zerownd.user = []

mha.transducers.mhachain.altplugs.dynamiccompression.plugin_name = mhachain
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.algos = [fftfilterbank dc combinechannels]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.unit = Hz
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.f = [177 297 500 841 1414 2378 4000 6727 11314]
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.fscale = log
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.ovltype = rect
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.ftype = center

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.gtdata = [[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0]]
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.gtmin = [0]
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.gtstep = [1]
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.tau_attack = [0.02]
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.tau_decay = [0.1]
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.fb = fftfilterbank
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.chname = fftfilterbank_nchannels

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.combinechannels.outchannels = 2

fragsize = 48
iolib = MHAIOJack

#io.con_in = [system:capture_1 system:capture_2]
#io.con_out = [system:playback_2 system:playback_1]

cmd=start

